#------------------------
#VISUALIZATION PARAMETERS (Primero)
#-----------------------
/control/execute visu.mac

#-------------------------------
#SET MATERIAL DATABASE (Segundo)
#-------------------------------
/gate/geometry/setMaterialDatabase ../data/GateMaterial.db

#---------------------
# WORLD (Tercero)
#---------------------
/gate/world/geometry/setXLength 40. cm
/gate/world/geometry/setYLength 40. cm
/gate/world/geometry/setZLength 40. cm
/gate/world/setMaterial Air
/gate/world/vis/setVisible 0

#--------------------------
#DETECTOR (Cuarto)
#--------------------------
/control/execute CTScanner.mac

#--------------------------
#PHANTOM (Quinto)
#--------------------------
/control/execute phantom_WedgeBGO.mac
/gate/Fantoma/moves/insert rotation
/gate/Fantoma/placement/setRotationAngle 10 deg
/gate/Fantoma/rotation/setSpeed 5. deg/s
/gate/Fantoma/rotation/setAxis 0 0 1

#--------------------------
#FISICAS (SEXTO)
#--------------------------
/control/execute Fisicas.mac

#--------------------------
#DIGITZER (SEPTIMO)
#--------------------------
/control/execute DetectorActor.mac
#/control/execute digitizer.mac

#--------------------------
#OUTPUT (OCTAVO)
#--------------------------
#/control/execute output.mac

#--------------------------
#VERBOSITY (NOVENO)
#--------------------------
/control/execute verbose.mac

#--------------------------
#INITIALIZATION (DECIMO)
#--------------------------
/gate/run/initialize

#--------------------
# SOURCE GPS (ONCEVAO)
#--------------------
/gate/source/addSource electron_beam gps
/gate/source/electron_beam/gps/particle e-
/gate/source/electron_beam/gps/ene/type Gauss
/gate/source/electron_beam/gps/ene/mono 12.2 MeV
/gate/source/electron_beam/gps/ene/sigma 0.0216 MeV
/gate/source/electron_beam/gps/centre 0 0 -55 cm
/gate/source/electron_beam/gps/angtype iso
/gate/source/electron_beam/gps/mintheta 0 deg
/gate/source/electron_beam/gps/maxtheta 0 deg
/gate/source/electron_beam/gps/minphi 0 deg
/gate/source/electron_beam/gps/maxphi 0 deg
/gate/source/electron_beam/gps/type Plane
/gate/source/electron_beam/gps/shape Circle
/gate/source/electron_beam/gps/radius 1.4 mm

#--------------------------------------
# START THE ACQUISITION (DOCEAVO y ULTIMO)
#--------------------------------------
/control/execute acquisition.mac

exit
